PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Show info dlg = False
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine instruction_1
    CodeComponent code_1
      Begin Experiment:
        import utils.CreateStimuli as CS
        cs = CS.CreateStimuli()
    TextComponent text_1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        $cs.getInstructions(
           'first-part.txt'
        )
    KeyboardComponent key_response_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction_2
    TextComponent text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        $cs.getInstructions(
           'second-part.txt'
        )
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_2
      Begin Routine:
        cs.setStoriesFromResponse()
  Routine argument_2
    TextComponent text_4
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine target_word
    TextComponent text_5
      text [set every repeat] = $missingTW
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine argument
    TextComponent argument_1
      text [set every repeat] = $sentence
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fixation_point
    TextComponent text_3
      color = red
      text [set every repeat] = +
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine response_2
    TextComponent text
      text = SI (1)           NO(0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.0
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  Routine response_1
    TextComponent response1
      text [set every repeat] = $targetWordP + "    " + $targetWordN
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      correctAns = $record_answer()
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1', '0'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        def record_answer():
            cs.record_answer(uid, context, key_resp_1.keys)
Flow
  Routine instruction_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/stories1.out.csv
    loopType = sequential
    nReps = 1
    Selected rows = 0:3
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    conditions:
      [{'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'P', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria adora la cucina italiana. Sua madre ha preparato un piatto di spaghetti al sugo per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False},
      {'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'N', 'contextId': 1, 'gender': u'F', 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'targetWordN': u'DISGUSTOSO', 'mark': False}]
    Routine fixation_point
    Routine argument
    Routine response_1
  LoopTerminator trials
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data/stories2.out.csv
    loopType = sequential
    nReps = 1
    Selected rows = 0:3
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    conditions:
      [{'contextId': 2, 'uid': 4, 'sentence': u'Giuseppe e Elisabetta sono andati a ballare. Elisabetta ha fatto 6 piroette. Giuseppe dice: \u201cSei cos\xec _________\u201d', 'gender': u'M', 'targetWordN': u'IMBRANATA', 'mark': u'SPIGLIATA', 'targetWordP': u'SPIGLIATA', 'sentenceBlock': u'PB', 'context': u'P'},
      {'contextId': 1, 'uid': 1, 'sentence': u'Maria odia la cucina a base di pesce. Sua madre ha preparato del salmone norvegese per cena. Maria dice : \u201c\xc8 cos\xec ________\u201d ', 'gender': u'F', 'targetWordN': u'DISGUSTOSO', 'mark': u'APPETITOSO', 'targetWordP': u'APPETITOSO', 'sentenceBlock': u'PB', 'context': u'N'},
      {'contextId': 10, 'uid': 17, 'sentence': u'Maria e Francesco parlano del loro futuro. Francesco \xe8 convinto che tutto andr\xe0 male. Maria dice: \u201cSei cos\xec _________\u201d', 'gender': u'F', 'targetWordN': u'NEGATIVO', 'mark': u'POSITIVO', 'targetWordP': u'POSITIVO', 'sentenceBlock': u'T', 'context': u'N'},
      {'contextId': 9, 'uid': 15, 'sentence': u'Federica e Giuseppe sono andati al cinema. Il film era noioso e triste. Giuseppe dice: \u201cEra cos\xec _________\u201d', 'gender': u'M', 'targetWordN': u'TERRIBILE', 'mark': u'PIACEVOLE', 'targetWordP': u'PIACEVOLE', 'sentenceBlock': u'T', 'context': u'N'}]
    Routine fixation_point
    Routine argument_2
    Routine target_word
    Routine response_2
  LoopTerminator trials_2
